objectvar vecT, vecV, stim1, outfile, gkm_file
outfile = new File()
gkm_file = new File()
vecV = new Vector()
vecT = new Vector()

FARADAY=96485
PI=3.141592
secondorder=2
dt=1e-3
celsius=30
create soma
access soma
v_init=-65
soma{
    nseg = 1
    diam = 15
    L = 20
    
    // insert naf
    // gbar_naf = 0.15
    // ena = 50
    // insert kdr_fs
    // gbar_kdr_fs = 0.1
    // insert ka_ib
    // gbar_ka_ib = 0.03
    // insert km
    // gbar_km = 0.00375
    // ek = -95
    insert cat
    gbar_cat = 1.0
//    eca = 125e-3
    insert pas
    e_pas = -65
    g_pas = 2e-5
    Ra = 250
    cm = 0.9

    stim1 = new IClamp(0.5)
    stim1.amp = 0.1
    stim1.dur = 20
    stim1.del = 20
}

tstop = 50
vecV.record(&soma.v(0.5))
vecT.record(&t)
run()
outfile.wopen("mydata/Vm.plot")

for ii = 0, vecV.size() - 1 {
    outfile.printf("%g %g\n", vecT.x(ii), vecV.x(ii))

}
outfile.close()

